CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<Wavelength>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_w2")
    Name to assign these images:BacteriaImage
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_w1")
    Name to assign these images:DNAImage
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Plate

EnhanceOrSuppressFeatures:[module_num:5|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
    Select the input image:BacteriaImage
    Name the output image:EnhancedBacteriaimage
    Select the operation:Enhance
    Feature size:20
    Feature type:Dark holes
    Range of hole sizes:7,35
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:EnhancedBacteriaimage
    Name the output image:SuppressedBacteriaimage
    Select the operation:Suppress
    Feature size:6
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:SuppressedBacteriaimage
    Name the primary objects to be identified:BacteriaObjects
    Typical diameter of objects, in pixel units (Min,Max):8,35
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.0
    Upper outlier fraction:0.0
    Averaging method:Mode
    Variance method:Standard deviation
    # of deviations:1.0
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
EnhanceOrSuppressFeatures:[module_num:8|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notes:['Use filtering to enhance the foci speckles in the image. The feature size setting should be specified to be at least as large as the largest feature to be enhanced.']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
    Select the input image:DNAImage
    Name the output image:EnhancedDNAImage
    Select the operation:Enhance
    Feature size:18
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:9|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notes:['Identify the foci using per-object thresholding to compute a threshold for each individual nuclei object. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:EnhancedDNAImage
    Name the primary objects to be identified:DNAObjects
    Typical diameter of objects, in pixel units (Min,Max):1,35
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0
    Upper outlier fraction:0.00
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:1.0
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
MaskObjects:[module_num:10|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
    Select objects to be masked:BacteriaObjects
    Name the masked objects:MaskedBacteriaObjects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:DNAObjects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:11|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
    Select objects to be masked:DNAObjects
    Name the masked objects:MaskedDNAObjects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MaskedBacteriaObjects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskImage:[module_num:12|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
    Select the input image:EnhancedDNAImage
    Name the output image:MaskedDNAImage
    Use objects or an image as a mask?:Objects
    Select object for mask:MaskedDNAObjects
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    Invert the mask?:No

MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:MaskedBacteriaObjects, MaskedDNAObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

RelateObjects:[module_num:14|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
    Parent objects:MaskedBacteriaObjects
    Child objects:MaskedDNAObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectIntensity:[module_num:15|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notes:['Measure the intensity of the foci against the h2ax image.']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
    Select images to measure:BacteriaImage, DNAImage, EnhancedBacteriaimage, MaskedDNAImage
    Select objects to measure:MaskedBacteriaObjects

MeasureObjectIntensityDistribution:[module_num:16|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
    Select images to measure:EnhancedDNAImage
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes only
    Maximum zernike moment:9
    Select objects to measure:MaskedBacteriaObjects
    Object to use as center?:Centers of other objects
    Select objects to use as centers:MaskedDNAObjects
    Scale the bins?:No
    Number of bins:6
    Maximum radius:12

FilterObjects:[module_num:17|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
    Select the objects to filter:MaskedBacteriaObjects
    Name the output objects:InterestingBacteriaObjects
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|E:\\1 PhD project\\CellProfiler InterestingFilter\\InterestingCellFiltering
    Rules or classifier file name:InterestingCellFilter3.txt
    Class number:1
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Allow fuzzy feature matching?:No

MaskObjects:[module_num:18|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
    Select objects to be masked:MaskedDNAObjects
    Name the masked objects:InterestingDNAObjects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:InterestingBacteriaObjects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:19|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
    Select the input objects:InterestingBacteriaObjects
    Name the output image:InterestingBacteriaObjectsImage
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:InterestingBacteriaObjectsImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:BacteriaImage
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:InterestingBacObjects
    Saved file format:tiff
    Output file location:Elsewhere...|E:\\1 PhD project\\CellProfiler CompactionFilter\\CellProfiler output images for training
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

MaskImage:[module_num:21|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notes:['Mask the foci image using the nuclei objects.']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
    Select the input image:EnhancedDNAImage
    Name the output image:InterestingDNAImage
    Use objects or an image as a mask?:Objects
    Select object for mask:InterestingDNAObjects
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    Invert the mask?:No

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:InterestingDNAImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNAImage
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:DNA
    Saved file format:tiff
    Output file location:Elsewhere...|E:\\1 PhD project\\CellProfiler CompactionFilter\\CellProfiler output images for training
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

MeasureImageAreaOccupied:[module_num:23|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
    Measure the area occupied by:Objects
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    Select object sets to measure:InterestingBacteriaObjects, InterestingDNAObjects

MeasureObjectSizeShape:[module_num:24|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
    Select object sets to measure:InterestingBacteriaObjects, InterestingDNAObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:25|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
    Select images to measure:BacteriaImage, DNAImage, EnhancedBacteriaimage, EnhancedDNAImage, InterestingDNAImage, MaskedDNAImage, SuppressedBacteriaimage
    Select objects to measure:InterestingBacteriaObjects, InterestingDNAObjects

MeasureObjectIntensityDistribution:[module_num:26|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
    Select images to measure:BacteriaImage, DNAImage, EnhancedBacteriaimage, EnhancedDNAImage, InterestingDNAImage, MaskedDNAImage
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:InterestingBacteriaObjects
    Object to use as center?:Centers of other objects
    Select objects to use as centers:InterestingDNAObjects
    Scale the bins?:No
    Number of bins:6
    Maximum radius:12

MeasureImageIntensity:[module_num:27|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
    Select images to measure:BacteriaImage, DNAImage, EnhancedBacteriaimage, EnhancedDNAImage, InterestingDNAImage, MaskedDNAImage
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:InterestingBacteriaObjects, InterestingDNAObjects
    Calculate custom percentiles:No
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
RelateObjects:[module_num:28|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
    Parent objects:InterestingBacteriaObjects
    Child objects:InterestingDNAObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
ExportToDatabase:[module_num:29|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Elsewhere...|E:\\1 PhD project\\CellProfiler CompactionFilter
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:CompactionFilterMain.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:InterestingBacteriaObjects,InterestingDNAObjects
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:BacteriaImage,DNAImage,InterestingBacteriaObjectsImage,InterestingDNAImage
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:384
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:CompactionFilterMain
    Which objects should be used for locations?:MaskedBacteria_objects
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:CompactedCells
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:Yes
    Select the classification type:Object
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    Do you want to add group fields?:Yes
    Enter the name of the group:Well_group
    Enter the per-image columns which define the group, separated by commas:ImageNumber, Image_Metadata_Plate, Image_Metadata_Well
    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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